PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Priming_exp
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_1
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = C:/Users/Jash/Downloads/PsychoPy/Word Priming/study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'}]
    Routine trial
  LoopTerminator trials_1
  LoopInitiator trial_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': 'f_br_c'},
      {'test': 'm_b_l_'},
      {'test': 'sp_ec_'},
      {'test': 't_t_r_al'},
      {'test': 'l_f_'},
      {'test': 't_m_t_'}]
    Routine test_1
  LoopTerminator trial_2
